CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dna.tiff")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "er.tiff")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "rna.tiff")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "agp.tiff")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "mito.tiff")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "agp.npy")
    Name to assign these images:IllumAGP
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "dna.npy")
    Name to assign these images:IllumDNA
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "er.npy")
    Name to assign these images:IllumER
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "mito.npy")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "rna.npy")
    Name to assign these images:IllumRNA
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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notes:['Problem now: detects some nuclei together', 'local maxima from 15 to 10 or 12?']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1
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    Log transform before thresholding?:No
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