CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "1.tif")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "2.tif")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "3.tif")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "4.tif")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "5.tif")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "AGP.npy")
    Name to assign these images:IllumAGP
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "DNA.npy")
    Name to assign these images:IllumDNA
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "ER.npy")
    Name to assign these images:IllumER
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "Mito.npy")
    Name to assign these images:IllumMito
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    Select the image type:Illumination function
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    Select the rule criteria:and (file does contain "RNA.npy")
    Name to assign these images:IllumRNA
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:6|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:7|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

FlagImage:[module_num:8|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enabled:False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
    Hidden:2
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Input Folder sub-folder|qc
    Rules file name:is_saturated_rules.txt
    Class number:2
    Allow fuzzy feature matching?:No
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Rules
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    Rules file location:Default Output Folder sub-folder|../qc
    Rules file name:is_blurry_rules.txt
    Class number:2
    Allow fuzzy feature matching?:No
    Ignore flag skips on last cycle?:No

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:DNA
    Name the output image:IllumBlue
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:DNA
    Name the output image:CorrBlue
    Select the illumination function:IllumBlue
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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notes:['Problem now: detects some nuclei together', 'local maxima from 15 to 10 or 12?']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
    Select the input image:CorrBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:12|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notes:['maybe RNA+ER?  when no RNA, using AGP or ER?  Probably AGP, but whatever works!  AGP is better (shows cleaner cell edge)', '', 'for BR00117062a--> maybe the upper thresh from 0.035 to 0.031']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:RNA
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.005,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:14|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
    Select the input image:DNA
    Name the output image:RescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:15|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
    Select the input image:AGP
    Name the output image:RescaleAGP
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:16|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:RescaleDNA
    Select the image to be colored green:RescaleAGP
    Select the image to be colored blue:RescaleDNA
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
ImageMath:[module_num:17|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
    Operation:None
    Raise the power of the result by:0.5
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ColorImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:18|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Cells

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Nuclei
    Select outline color:yellow
    Select objects to display:Cells

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Argonne/git_repos/JUMP_vision_model/segmented_image_temp
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:21|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Argonne/git_repos/JUMP_vision_model
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
SaveCroppedObjects:[module_num:22|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
    Do you want to save cropped images or object masks?:Images
    Objects:Cells
    Directory:Default Input Folder sub-folder|Argonne/git_repos/JUMP_vision_model/segmented_image_temp
    Prefix saved crop image name with input image name?:No
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    Save output crops in nested folders?:Yes
    Saved file format:8-bit tiff
    Image to crop:AGP

CreateBatchFiles:[module_num:23|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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