CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dna.tiff")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "agp.tiff")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "rna.tiff")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "er.tiff")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "mito.tiff")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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enabled:False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
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigRNA
    Name the output image:RNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationCalculate:[module_num:6|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enabled:False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
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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enabled:False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
    Select the input image:OrigAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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enabled:False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
    Select the input image:OrigER
    Name the output image:IllumER
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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enabled:False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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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enabled:False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
    Select the input image:OrigRNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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enabled:False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
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:12|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enabled:False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
    Select the input image:OrigAGP
    Name the output image:CorrAGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:13|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enabled:False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
    Select the input image:OrigER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:14|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enabled:False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
    Select the input image:OrigMito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:15|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enabled:False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
    Select the input image:OrigRNA
    Name the output image:CorrRNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:OrigDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:17|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CorrAGP
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0007,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:18|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enabled:False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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:19|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enabled:False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
    Select the input image:CorrDNA
    Name the output image:RescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:20|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enabled:False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
    Select the input image:CorrAGP
    Name the output image:RescaleAGP
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:21|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enabled:False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
    Select the input image:CorrER
    Name the output image:RescaleER
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:22|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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:No
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    Select the image to be colored green:RescaleDNA
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    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
ImageMath:[module_num:23|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enabled:False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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ColorImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MeasureObjectIntensity:[module_num:24|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enabled:False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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectSizeShape:[module_num:25|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enabled:False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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayOutlines:[module_num:26|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath
    Name the output image:OrigOverlay2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:Nuclei

MeasureImageAreaOccupied:[module_num:27|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enabled:False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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells

SaveImages:[module_num:28|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay2
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|Argonne/LUCID/h2a_nine_week/week_one_control/neg_control/1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:RescaleER
    Select method for constructing file names:Single name
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    Enter single file name:Caspase
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    Saved file format:png
    Output file location:Default Input Folder sub-folder|Argonne/LUCID/h2a_nine_week/week_one_control/neg_control/1
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveCroppedObjects:[module_num:30|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
    Do you want to save cropped images or object masks?:Images
    Objects:Nuclei
    Directory:Default Output Folder|Argonne/LUCID/7-14-25/fib
    Prefix saved crop image name with input image name?:No
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    Save output crops in nested folders?:No
    Saved file format:png
    Image to crop:OrigDNA

ExportToSpreadsheet:[module_num:31|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Argonne/LUCID/h2a_nine_week/week_one_control/pos_control/1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Frame_OrigAGP,Image|Frame_OrigER,Image|Frame_OrigRNA,Image|Frame_OrigDNA,Image|Frame_OrigMito,Image|MD5Digest_OrigAGP,Image|MD5Digest_OrigDNA,Image|MD5Digest_OrigMito,Image|MD5Digest_OrigER,Image|MD5Digest_OrigRNA,Image|ExecutionTime_11CorrectIlluminationApply,Image|ExecutionTime_14CorrectIlluminationApply,Image|ExecutionTime_18IdentifyTertiaryObjects,Image|ExecutionTime_06CorrectIlluminationCalculate,Image|ExecutionTime_16IdentifyPrimaryObjects,Image|ExecutionTime_19RescaleIntensity,Image|ExecutionTime_26OverlayOutlines,Image|ExecutionTime_03NamesAndTypes,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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