CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Input 5-channel Cell Painting images. Mito channel (mito.tiff) is used for mitochondria detection.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['Week and Dose are encoded in the input directory structure: .../Week1/Dose10uM/image.tiff. Two folder-name extraction methods capture each level separately. The file-level well/position metadata is handled externally by the backend and does not need to be re-extracted here.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[/\\](?P<Week>[^/\\]+)[/\\][^/\\]+[/\\]?$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[/\\](?P<Dose>[^/\\]+)[/\\]?$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign channel names. Mito channel carries the MitoTracker / mitochondria signal.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "dna.tiff")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "er.tiff")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "rna.tiff")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "agp.tiff")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "mito.tiff")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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notes:['Groups are defined by the Week (parent folder) and Dose (subfolder) extracted from the directory structure. Each batch sent by the backend lands in .../Week/Dose/ so grouping here mirrors that layout exactly.']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Week
    Metadata category:Dose

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:OrigDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigMito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigAGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:50
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:OrigDNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:9|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
    Select the input image:OrigMito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:10|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
    Select the input image:OrigAGP
    Name the output image:CorrAGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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notes:['Segment nuclei from DNA/DAPI channel as anchors for cell boundaries.']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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:8
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:12|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notes:['Expand nuclei to whole-cell boundaries. Using AGP (plasma membrane signal) as in the original pipeline.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:CorrAGP
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0005,.06
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskImage:[module_num:13|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notes:['Mask the Mito channel to only the cytoplasmic area of each cell, excluding nuclear signal which can cause false positives.']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
    Select the input image:CorrMito
    Name the output image:Mito_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cells
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:14|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notes:['Enhance punctate mitochondria spots before segmentation. Feature size should approximate your mitochondrion diameter in pixels. Individual mitochondria at 20x are typically 2-8px. Increase for 10x. For tubular/networked mito, switch Feature type to Neurites and Enhancement method to Tubeness.']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
    Select the input image:Mito_Masked
    Name the output image:Mito_Enhanced
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:15|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notes:['Detect individual mitochondria as primary objects. Min/Max diameter (pixels) must be tuned to your microscopy resolution. At 20x: individual mito ~2-8px, clusters ~8-20px. Use Otsu 3-class with Log transform for dim, punctate signal. Lower the threshold correction factor if too few are detected.']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
    Select the input image:Mito_Enhanced
    Name the primary objects to be identified:Mitochondria
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RelateObjects:[module_num:16|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notes:['Assign each detected mitochondrion to its parent Cell. This adds Children_Mitochondria_Count to Cells — the per-cell mitochondrial count used for all downstream averaging.']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
    Parent objects:Cells
    Child objects:Mitochondria
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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    Parent metadata:None

MeasureObjectIntensity:[module_num:17|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notes:['Measure Mito intensity per cell — useful for normalizing count by signal strength and for QC filtering dim cells.']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
    Select images to measure:CorrMito
    Select objects to measure:Cells, Mitochondria

MeasureObjectSizeShape:[module_num:18|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notes:['Optional shape measurements on Mitochondria objects — useful for distinguishing fragmented (small, round) vs networked (elongated) mito morphology.']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
    Select object sets to measure:Mitochondria, Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:19|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notes:['Measure what fraction of each cell image is occupied by mitochondria. Complements count with an area-based metric.']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
    Measure the area occupied by:Objects
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    Select object sets to measure:Mitochondria, Cells

OverlayOutlines:[module_num:20|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notes:['Visual QC: Mito objects (yellow) within cell boundaries (cyan) on the corrected Mito channel.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CorrMito
    Name the output image:MitoOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FFFF
    Select objects to display:Cells
    Select outline color:#FFFF00
    Select objects to display:Mitochondria

SaveImages:[module_num:21|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notes:['Save QC overlay images.']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
    Select the type of image to save:Image
    Select the image to save:MitoOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigMito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mito_overlay
    Saved file format:png
    Output file location:Default Output Folder|mito_pipeline/overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:22|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notes:['Export per-cell mitochondria counts and per-image summaries. The key column for downstream averaging is Cells|Children_Mitochondria_Count. The Image-level file includes per-image mean/median/SD of mito counts, ready to aggregate by Week and Dose in Python/R. The accompanying script mito_count_analysis.py performs this groupby averaging and comparison.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|mito_pipeline/measurements
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Children_Mitochondria_Count,Cells|Number_Object_Number,Cells|Intensity_MeanIntensity_CorrMito,Cells|Intensity_IntegratedIntensity_CorrMito,Cells|AreaShape_Area,Mitochondria|AreaShape_Area,Mitochondria|AreaShape_MajorAxisLength,Mitochondria|AreaShape_MinorAxisLength,Mitochondria|AreaShape_Eccentricity,Mitochondria|AreaShape_FormFactor,Mitochondria|Intensity_MeanIntensity_CorrMito,Mitochondria|Parent_Cells,Mitochondria|Number_Object_Number,Image|Count_Cells,Image|Count_Mitochondria,Image|FileName_OrigMito,Image|AreaOccupied_AreaOccupied_Mitochondria,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Mito_
    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
    File name:Cells_MitoCount.csv
    Use the object name for the file name?:No
    Data to export:Mitochondria
    Combine these object measurements with those of the previous object?:No
    File name:Mitochondria.csv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image_MitoSummary.csv
    Use the object name for the file name?:No
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Mito_
    Overwrite existing files without warning?:Yes
